PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = sample05
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Routines
  Routine trial
    ptc_rec_component ptc_rec
      start_msg = Start recording
      start_rec = True
      stop_msg = Stop recording
      stop_rec = True
      wait = True
    ptc_getpos_component ptc_getpos
      binocular = Average
      filler = -10000
    KeyboardComponent key_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 0.75
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      text:
        Event is recorded when the gaze (the center of the green circle) is on the moving target (the black circle) .
        Press space key to exit.
    PolygonComponent target
      fillColor = black
      lineColor = black
      pos [set every frame] = (0.4*cos(t), 0.4*sin(t))
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_marker
      fillColor = lime
      lineColor = lime
      nVertices = 64
      pos [set every frame] = ptc_getpos
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    ptc_message_component ptc_message
      text = $'ON_TARGET,{:.3f},{:.3f})'.format(*ptc_getpos)
      time = target.contains(ptc_getpos)
      timeType = condition
  Routine init
    ptc_init_component ptc_init
      datafile = $expInfo['participant']+'.tsv'
      embed = False
      id = 0
      overwrite = False
    ptc_cal_component ptc_cal
      calibration_points = [[-0.2, -0.2], [0.2, -0.2], [0, 0], [-0.2, 0.2], [0.2, 0.2]]
      decision_key = return
      enable_mouse = True
      move_duration = 1.0
      show_status = True
      shuffle = False
      start_key = space
      text_color = white
Flow
  Routine init
  Routine trial
